PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = king_devick
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the King Devick experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card_instructions
    TextComponent demo_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Demonstration card.

        Press SPACE to continue.
    KeyboardComponent demo_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test1_card_instructions
    TextComponent test1_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Test 1 card.

        Press SPACE to continue.
    KeyboardComponent test1_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_card_instructions
    TextComponent test2_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Test 2 card.

        Press SPACE to continue.
    KeyboardComponent test2_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3_card_instructions
    TextComponent test3_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the Test 3 card.

        Press SPACE to continue.
    KeyboardComponent test3_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card_instructions_2
    TextComponent demo_instructions_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the demonstration card.

        Press SPACE to continue.
    KeyboardComponent demo_instructions_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card
    ImageComponent demo_image
      image = king_devick_stimuli\demo_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test1_card
    ImageComponent test1_image
      image = king_devick_stimuli\test1_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_card
    ImageComponent test2_image
      image = king_devick_stimuli\test2_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3_card
    ImageComponent test3_image
      image = king_devick_stimuli\test3_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine demo_card_instructions
  Routine demo_card
  Routine test1_card_instructions
  Routine test1_card
  Routine test2_card_instructions
  Routine test2_card
  Routine test3_card_instructions
  Routine test3_card
