PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = resting_state
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the resting state task.

        Please close your eyes and sit quietly for 7 minutes.

        Press SPACE when ready to begin.
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
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  Routine done
    SoundComponent done_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent done_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = The resting state trial is now complete.
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Flow
  Routine welcome
  Routine trial
  Routine done
